PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = cm
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = PLOT behavioral full practice
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    ImageComponent instr1
      image = images/instr1.png
      saveStartStop = False
      size = (1101, 690)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_2
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    ImageComponent instr2
      image = images/instr2.png
      saveStartStop = False
      size = (1101, 690)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent enter2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    TextComponent goodjob
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = GOOD JOB!
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  Routine practice_1
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    PolygonComponent blueline
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori = -120
      pos = (12, 9)
      saveStartStop = False
      shape = line
      size = [2, 1]
      startVal [time (s)] = 0.0
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    PolygonComponent redline
      fillColor = red
      lineColor = red
      lineWidth = 3
      ori = 120
      pos = (-12, 9)
      saveStartStop = False
      shape = line
      size = [2, 1]
      startVal [time (s)] = 0.0
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    TextComponent button_instrL
      letterHeight = 0.8
      pos = (-13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click buttons 1 and 2 to
        rotate the BLUE line.
    TextComponent button_instrR
      letterHeight = 0.8
      pos = (13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click button 3 when
        the lines look parallel.
    ImageComponent buttons_trial
      image = images/practice4.jpg
      pos = (0, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        your_mouse = event.Mouse(visible = False)
      Each Frame:
        corrans = [120, -60, -240, 300]

        if len(key_resp.keys) > 0:

            if key_resp.keys[-1] == '1':
                blueline.setOri(10,'-')
                key_resp.keys.append(1)
                win.flip()
                if blueline.ori in corrans:
                    red_correct.opacity = 0.5
                    blue_correct.opacity = 0.5
                    paralleltext.pos = (0,0)
                else:
                    red_correct.opacity = 0
                    blue_correct.opacity = 0
                    paralleltext.pos = (0,20)

            elif key_resp.keys[-1] == '2':
                blueline.setOri(10,'+')
                key_resp.keys.append(2)
                win.flip()
                if blueline.ori in corrans:
                    red_correct.opacity = 0.5
                    blue_correct.opacity = 0.5
                    paralleltext.pos = (0,0)
                else:
                    red_correct.opacity = 0
                    blue_correct.opacity = 0
                    paralleltext.pos = (0,20)


            elif key_resp.keys[-1] == '3':
                continueRoutine = False

            elif key_resp.keys[-1] == 'escape':
                endExpNow = True
    PolygonComponent blue_correct
      fillColor = yellow
      lineColor = yellow
      lineWidth = 9
      opacity = 0
      ori = 120
      pos = (12, 9)
      saveStartStop = False
      shape = line
      size = [4, 1]
      startVal [time (s)] = 0.0
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    PolygonComponent red_correct
      fillColor = yellow
      lineColor = yellow
      lineWidth = 9
      opacity = 0
      ori = 120
      pos = (-12, 9)
      saveStartStop = False
      shape = line
      size = [4, 1]
      startVal [time (s)] = 0.0
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    TextComponent paralleltext
      letterHeight = 0.8
      pos = (0, 20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = See how the lines are parallel?
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  Routine practice_2
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    PolygonComponent blueline_2
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori = 100
      pos = (9, 9)
      saveStartStop = False
      shape = line
      size = [2, 1]
      startVal [time (s)] = 0.0
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    PolygonComponent redline_2
      fillColor = red
      lineColor = red
      lineWidth = 3
      ori = 80
      pos = (-7, -2)
      saveStartStop = False
      shape = line
      size = [2, 1]
      startVal [time (s)] = 0.0
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    TextComponent button_instrL_2
      letterHeight = 0.8
      pos = (-13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click buttons 1 and 2 to
        rotate the BLUE line.
    TextComponent button_instrR_2
      letterHeight = 0.8
      pos = (13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click button 3 when
        the lines look parallel.
    ImageComponent buttons_trial_2
      image = images/practice4.jpg
      pos = (0, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        your_mouse = event.Mouse(visible = False)
      Each Frame:
        corrans = [80, 260, -100, -280]

        if len(key_resp_2.keys) > 0:

            if key_resp_2.keys[-1] == '1':
                blueline_2.setOri(5,'-')
                key_resp_2.keys.append(1)
                win.flip()
                if blueline_2.ori in corrans:
                    red_correct_2.opacity = 0.5
                    blue_correct_2.opacity = 0.5
                else:
                    red_correct_2.opacity = 0
                    blue_correct_2.opacity = 0

            elif key_resp_2.keys[-1] == '2':
                blueline_2.setOri(5,'+')
                key_resp_2.keys.append(2)
                win.flip()
                if blueline_2.ori in corrans:
                    red_correct_2.opacity = 0.5
                    blue_correct_2.opacity = 0.5
                else:
                    red_correct_2.opacity = 0
                    blue_correct_2.opacity = 0

            elif key_resp_2.keys[-1] == '3':
                continueRoutine = False

            elif key_resp_2.keys[-1] == 'escape':
                endExpNow = True
    PolygonComponent blue_correct_2
      fillColor = yellow
      lineColor = yellow
      lineWidth = 9
      opacity = 0
      ori = 80
      pos = (9, 9)
      saveStartStop = False
      shape = line
      size = [4, 1]
      startVal [time (s)] = 0.0
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    PolygonComponent red_correct_2
      fillColor = yellow
      lineColor = yellow
      lineWidth = 9
      opacity = 0
      ori = 80
      pos = (-7, -2)
      saveStartStop = False
      shape = line
      size = [4, 1]
      startVal [time (s)] = 0.0
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  Routine practice_3
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    PolygonComponent blueline_3
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori = 90
      pos = (-11, -4)
      saveStartStop = False
      shape = line
      size = [1, 1]
      startVal [time (s)] = 0.0
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    PolygonComponent redline_3
      fillColor = red
      lineColor = red
      lineWidth = 3
      ori = 140
      pos = (12, -4)
      saveStartStop = False
      shape = line
      size = [2, 1]
      startVal [time (s)] = 0.0
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    TextComponent button_instrL_3
      letterHeight = 0.8
      pos = (-13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click buttons 1 and 2 to
        rotate the BLUE line.
    TextComponent button_instrR_3
      letterHeight = 0.8
      pos = (13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click button 3 when
        the lines look parallel.
    ImageComponent buttons_trial_3
      image = images/practice4.jpg
      pos = (0, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        your_mouse = event.Mouse(visible = False)
      Each Frame:
        corrans = [140, -40, -220, 320]

        if len(key_resp_3.keys) > 0:

            if key_resp_3.keys[-1] == '1':
                blueline_3.setOri(10,'-')
                key_resp_3.keys.append(1)
                win.flip()
                if blueline_3.ori in corrans:
                    red_correct_3.opacity = 0.5
                    blue_correct_3.opacity = 0.5
                else:
                    red_correct_3.opacity = 0
                    blue_correct_3.opacity = 0

            elif key_resp_3.keys[-1] == '2':
                blueline_3.setOri(10,'+')
                key_resp_3.keys.append(2)
                win.flip()
                if blueline_3.ori in corrans:
                    red_correct_3.opacity = 0.5
                    blue_correct_3.opacity = 0.5
                else:
                    red_correct_3.opacity = 0
                    blue_correct_3.opacity = 0

            elif key_resp_3.keys[-1] == '3':
                continueRoutine = False

            elif key_resp_3.keys[-1] == 'escape':
                endExpNow = True
    PolygonComponent blue_correct_3
      fillColor = yellow
      lineColor = yellow
      lineWidth = 9
      opacity = 0
      ori = 140
      pos = (-11, -4)
      saveStartStop = False
      shape = line
      size = [4, 1]
      startVal [time (s)] = 0.0
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    PolygonComponent red_correct_3
      fillColor = yellow
      lineColor = yellow
      lineWidth = 9
      opacity = 0
      ori = 140
      pos = (12, -4)
      saveStartStop = False
      shape = line
      size = [4, 1]
      startVal [time (s)] = 0.0
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  Routine end_prep
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    ImageComponent instructions3
      image = images/instr3.png
      size = (1101, 690)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  Routine instructions_2
  Routine practice_1
  Routine feedback
  Routine practice_2
  Routine feedback
  Routine practice_3
  Routine end_prep
