PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = PLOT_scan
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Routines
  Routine end
    TextComponent bye
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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  Routine plot_trials
    PolygonComponent blueline
      fillColor [set every repeat] = $[-1.000, 0.004, 1.000]
      lineColor [set every repeat] = $[-1.000, 0.004, 1.000]
      lineWidth = 3
      ori [set every repeat] = $BlueOri
      pos [set every repeat] = $(Bluex, Bluey)
      saveStartStop = False
      shape = line
      size [set every repeat] = $(BlueLengthx, BlueLengthy)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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    PolygonComponent redline
      fillColor [set every repeat] = red
      lineColor [set every repeat] = red
      lineWidth = 3
      ori [set every repeat] = $RedOri
      pos [set every repeat] = $(Redx, Redy)
      saveStartStop = False
      shape = line
      size = (3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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    TextComponent button_instrL
      letterHeight = 0.8
      pos = (-13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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      text:
        Click buttons 1 and 2 to
        rotate the BLUE line.
    TextComponent button_instrR
      letterHeight = 0.8
      pos = (13, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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      text:
        Click button 3 when
        the lines look parallel.
    ImageComponent buttons_trial
      image = images/practice4.jpg
      pos = (0, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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    KeyboardComponent key_resp
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      store = all keys
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        your_mouse = event.Mouse(visible = False)
      Each Frame:
        if len(key_resp.keys) > 0:

            if key_resp.keys[-1] == '1':
                blueline.setOri(Angle,'-')
                key_resp.keys.append(1)
                win.flip()

            elif key_resp.keys[-1] == '2':
                blueline.setOri(Angle,'+')
                key_resp.keys.append(2)
                win.flip()

            elif key_resp.keys[-1] == '3':
                blueline.setColor([-1,-1,-1],'rgb')
                redline.setColor([-1,-1,-1],'rgb')
                win.flip()

            elif key_resp.keys[-1] == 'escape':
                endExpNow = True
  Routine jitter_2
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      units = cm
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  Routine wait_for_scanner
    KeyboardComponent trigger
      allowedKeys = '5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_wait
      fillColor = white
      shape = cross
      size = (2,2)
      startVal [time (s)] = 0.0
      units = cm
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Flow
  Routine wait_for_scanner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialNo', 1), ('BlueLengthx', 3), ('BlueLengthy', 0), ('BlueOri', 90), ('Bluex', -11), ('Bluey', 10), ('RedOri', 198), ('RedPos', '(13, -4)'), ('Redx', 13), ('Redy', -4), ('Angle', 9), ('jitter', 6)]),
      OrderedDict([('TrialNo', 2), ('BlueLengthx', 3), ('BlueLengthy', 0), ('BlueOri', 162), ('Bluex', -14), ('Bluey', -4), ('RedOri', 243), ('RedPos', '(14, -4)'), ('Redx', 14), ('Redy', -4), ('Angle', 9), ('jitter', 3)]),
      OrderedDict([('TrialNo', 3), ('BlueLengthx', 1), ('BlueLengthy', 0), ('BlueOri', 261), ('Bluex', 11), ('Bluey', 10), ('RedOri', 153), ('RedPos', '(-11, -4)'), ('Redx', -11), ('Redy', -4), ('Angle', 9), ('jitter', 4)]),
      OrderedDict([('TrialNo', 4), ('BlueLengthx', 1), ('BlueLengthy', 0), ('BlueOri', 144), ('Bluex', 14), ('Bluey', 10), ('RedOri', 261), ('RedPos', '(-15, 9)'), ('Redx', -15), ('Redy', 9), ('Angle', 9), ('jitter', 2)]),
      OrderedDict([('TrialNo', 5), ('BlueLengthx', 1), ('BlueLengthy', 0), ('BlueOri', 90), ('Bluex', 15), ('Bluey', -4), ('RedOri', 198), ('RedPos', '(-15, -4)'), ('Redx', -15), ('Redy', -4), ('Angle', 6), ('jitter', 4)]),
      OrderedDict([('TrialNo', 6), ('BlueLengthx', 3), ('BlueLengthy', 0), ('BlueOri', 228), ('Bluex', -15), ('Bluey', 9), ('RedOri', 102), ('RedPos', '(15, 9)'), ('Redx', 15), ('Redy', 9), ('Angle', 6), ('jitter', 6)])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
    Routine jitter_2
    Routine plot_trials
  LoopTerminator trials
  Routine end
