PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = plot_practice
  keyboardBackend = ioHub
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Routines
  Routine instructions1
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    ImageComponent instr1
      image = images/instr1.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions2
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    ImageComponent instr_2
      image = images/instr2.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice1
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #hide mouse
        mouse = event.Mouse(visible=False)
      Begin Routine:
        #no really, hide the mouse
        win.mouseVisible = False

        #set corrans
        corrans = [120, -60, -240, 300]
      Each Frame:
        #get current response
        resp = event.getKeys(['1','2'])

        if len(resp):
            if resp[0] == '1':
                blueline.setOri(10,'-')
                if blueline.ori in corrans:
                    red_correct.opacity = 0.2
                    blue_correct.opacity = 0.2
                    paralleltext.pos = (0,0)
                else:
                    red_correct.opacity = 0
                    blue_correct.opacity = 0
                    paralleltext.pos = (0,2)
            elif resp[0] == '2':
                blueline.setOri(10,'+')
                if blueline.ori in corrans:
                    red_correct.opacity = 0.2
                    blue_correct.opacity = 0.2
                    paralleltext.pos = (0,0)
                else:
                    red_correct.opacity = 0
                    blue_correct.opacity = 0
                    paralleltext.pos = (0,2)
    PolygonComponent blueline
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 3
      ori [set every repeat] = -120
      pos [set every repeat] = (0.4, 0.4)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.1, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent blue_correct
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0
      ori [set every repeat] = 120
      pos [set every repeat] = (0.4, 0.4)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.12, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent redline
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      ori [set every repeat] = 120
      pos [set every repeat] = (-0.4, 0.4)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.1, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent red_correct
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0
      ori [set every repeat] = 120
      pos [set every repeat] = (-0.4, 0.4)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.12, 0)
      startVal [time (s)] = 0.0
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    TextComponent button_L
      letterHeight = 0.04
      pos = (-0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press 1 and 2 to
        rotate the BLUE line.
    TextComponent button_R
      letterHeight = 0.04
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press ENTER when
        the lines look parallel.
    ImageComponent buttons_center
      image = images/practice4.jpg
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent paralleltext
      letterHeight = 0.04
      pos = (0, 2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = See how the lines are parallel?
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = GOOD JOB!
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  Routine practice2
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        #no really, hide the mouse
        win.mouseVisible = False

        #set corrans
        corrans = [80, 260, -100, -280]
      Each Frame:
        #get current response
        resp = event.getKeys(['1','2'])

        if len(resp):
            if resp[0] == '1':
                blueline_2.setOri(5,'-')
                if blueline_2.ori in corrans:
                    red_correct_2.opacity = 0.2
                    blue_correct_2.opacity = 0.2
                    paralleltext_2.pos = (0,0)
                else:
                    red_correct_2.opacity = 0
                    blue_correct_2.opacity = 0
                    paralleltext_2.pos = (0,2)
            elif resp[0] == '2':
                blueline_2.setOri(5,'+')
                if blueline_2.ori in corrans:
                    red_correct_2.opacity = 0.2
                    blue_correct_2.opacity = 0.2
                    paralleltext_2.pos = (0,0)
                else:
                    red_correct_2.opacity = 0
                    blue_correct_2.opacity = 0
                    paralleltext_2.pos = (0,2)
    PolygonComponent blueline_2
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 3
      ori [set every repeat] = 100
      pos [set every repeat] = (0.3, 0.3)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.1, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent blue_correct_2
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0
      ori [set every repeat] = 80
      pos [set every repeat] = (0.3, 0.3)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.12, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent redline_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      ori [set every repeat] = 80
      pos [set every repeat] = (-0.3, -0.2)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.1, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent red_correct_2
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0
      ori [set every repeat] = 80
      pos [set every repeat] = (-0.3, -0.2)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.12, 0)
      startVal [time (s)] = 0.0
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    TextComponent button_L_2
      letterHeight = 0.04
      pos = (-0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press 1 and 2 to
        rotate the BLUE line.
    TextComponent button_R_2
      letterHeight = 0.04
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press ENTER when
        the lines look parallel.
    ImageComponent buttons_center_2
      image = images/practice4.jpg
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent paralleltext_2
      letterHeight = 0.04
      pos = (0, 2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = See how the lines are parallel?
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice3
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        #no really, hide the mouse
        win.mouseVisible = False

        #set corrans
        corrans = [140, -40, -220, 320]
      Each Frame:
        #get current response
        resp = event.getKeys(['1','2'])

        if len(resp):
            if resp[0] == '1':
                blueline_3.setOri(10,'-')
                if blueline_3.ori in corrans:
                    red_correct_3.opacity = 0.2
                    blue_correct_3.opacity = 0.2
                    paralleltext_3.pos = (0,0)
                else:
                    red_correct_3.opacity = 0
                    blue_correct_3.opacity = 0
                    paralleltext_3.pos = (0,2)
            elif resp[0] == '2':
                blueline_3.setOri(10,'+')
                if blueline_3.ori in corrans:
                    red_correct_3.opacity = 0.2
                    blue_correct_3.opacity = 0.2
                    paralleltext_3.pos = (0,0)
                else:
                    red_correct_3.opacity = 0
                    blue_correct_3.opacity = 0
                    paralleltext_3.pos = (0,2)
    PolygonComponent blueline_3
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 3
      ori [set every repeat] = 90
      pos [set every repeat] = (-0.4, -0.2)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.033, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent blue_correct_3
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0
      ori [set every repeat] = 140
      pos [set every repeat] = (-0.4, -0.2)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.12, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent redline_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      ori [set every repeat] = 140
      pos [set every repeat] = (0.4, -0.2)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.1, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent red_correct_3
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0
      ori [set every repeat] = 140
      pos [set every repeat] = (0.4, -0.2)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.12, 0)
      startVal [time (s)] = 0.0
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    TextComponent button_L_3
      letterHeight = 0.04
      pos = (-0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press 1 and 2 to
        rotate the BLUE line.
    TextComponent button_R_3
      letterHeight = 0.04
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press ENTER when
        the lines look parallel.
    ImageComponent buttons_center_3
      image = images/practice4.jpg
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent paralleltext_3
      letterHeight = 0.04
      pos = (0, 2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = See how the lines are parallel?
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_prep
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    ImageComponent instr3
      image = images/instr3.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions1
  Routine instructions2
  Routine practice1
  Routine feedback
  Routine practice2
  Routine feedback
  Routine practice3
  Routine end_prep
