PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  blendMode = nofbo
  color = -1.0000, -1.0000, -1.0000
  expName = plot
  keyboardBackend = ioHub
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent ready
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Get ready!
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  Routine plot_trials
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    KeyboardComponent key_resp
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #hide mouse
        mouse = event.Mouse(visible=False)
      Begin Routine:
        #no really, hide the mouse
        win.mouseVisible = False
      Each Frame:
        #get current response
        resp = event.getKeys(['1','2','return'])

        #move lines
        if len(resp):
            if resp[0] == '1':
                blueline.setOri(Angle,'-')
            elif resp[0] == '2':
                blueline.setOri(Angle,'+')
            elif resp[0] == 'return':
                thisExp.addData('final_orientation', blueline.ori)
                continueRoutine = False
      End Routine:
        # score trial
        if blueline.ori % 180 == RedOri % 180:
            thisExp.addData('corrAns', '1')
        else:
            thisExp.addData('corrAns', '0')
    PolygonComponent blueline
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 3
      ori [set every repeat] = BlueOri
      pos [set every repeat] = $(Bluex, Bluey)
      saveStartStop = False
      shape = line
      size [set every repeat] = $(BlueLengthx, 0)
      startVal [time (s)] = 0.0
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    PolygonComponent redline
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      ori [set every repeat] = RedOri
      pos [set every repeat] = $(Redx, Redy)
      saveStartStop = False
      shape = line
      size [set every repeat] = (0.1, 0)
      startVal [time (s)] = 0.0
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    TextComponent button_L
      letterHeight = 0.04
      pos = (-0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press 1 and 2 to
        rotate the BLUE line.
    TextComponent button_R
      letterHeight = 0.04
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press ENTER when
        the lines look parallel.
    ImageComponent buttons_center
      image = images/practice4.jpg
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextComponent bye
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'TrialNo': 1, 'BlueLengthx': 0.075, 'BlueOri': 90, 'Bluex': -0.36, 'Bluey': 0.3, 'RedOri': 198, 'Redx': 0.4, 'Redy': -0.18, 'Angle': 9},
      {'TrialNo': 2, 'BlueLengthx': 0.075, 'BlueOri': 162, 'Bluex': -0.42, 'Bluey': -0.18, 'RedOri': 243, 'Redx': 0.42, 'Redy': -0.18, 'Angle': 9},
      {'TrialNo': 3, 'BlueLengthx': 0.025, 'BlueOri': 261, 'Bluex': 0.36, 'Bluey': 0.3, 'RedOri': 153, 'Redx': -0.36, 'Redy': -0.18, 'Angle': 9},
      {'TrialNo': 4, 'BlueLengthx': 0.025, 'BlueOri': 144, 'Bluex': 0.42, 'Bluey': 0.3, 'RedOri': 261, 'Redx': -0.44, 'Redy': 0.28, 'Angle': 9},
      {'TrialNo': 5, 'BlueLengthx': 0.025, 'BlueOri': 90, 'Bluex': 0.44, 'Bluey': -0.18, 'RedOri': 198, 'Redx': -0.44, 'Redy': -0.18, 'Angle': 6},
      {'TrialNo': 6, 'BlueLengthx': 0.075, 'BlueOri': 228, 'Bluex': -0.44, 'Bluey': 0.28, 'RedOri': 102, 'Redx': 0.44, 'Redy': 0.28, 'Angle': 6},
      {'TrialNo': 7, 'BlueLengthx': 0.025, 'BlueOri': 120, 'Bluex': -0.38, 'Bluey': -0.18, 'RedOri': 168, 'Redx': 0.38, 'Redy': 0.3, 'Angle': 6},
      {'TrialNo': 8, 'BlueLengthx': 0.075, 'BlueOri': 108, 'Bluex': 0.36, 'Bluey': -0.18, 'RedOri': 246, 'Redx': -0.34, 'Redy': 0.3, 'Angle': 6},
      {'TrialNo': 9, 'BlueLengthx': 0.075, 'BlueOri': 132, 'Bluex': 0.38, 'Bluey': 0.3, 'RedOri': 162, 'Redx': -0.44, 'Redy': -0.18, 'Angle': 3},
      {'TrialNo': 10, 'BlueLengthx': 0.025, 'BlueOri': 237, 'Bluex': 0.42, 'Bluey': 0.3, 'RedOri': 207, 'Redx': -0.46, 'Redy': 0.3, 'Angle': 3}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
    Routine plot_trials
  LoopTerminator trials
  Routine end
